PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'learning_type': 'motor'}
  Full-screen window = True
  Monitor = mylaptop57cm
  Screen = 1
  Units = deg
  Use version = 2023.2.3
  Window size (pixels) = [1280, 800]
  expName = ASRT_motor_v2
  keyboardBackend = ioHub
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Routines
  Routine trial
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    PolygonComponent arrowhead
      fillColor = white
      ori [set every repeat] = orientation_degrees
      shape = arrow
      size = (3,3)
      startVal [time (s)] = 0
      units = deg
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    KeyboardComponent key_resp
      allowedKeys = '1','2','3','4','space'
      correctAns = $correct_answer_direction
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
      storeCorrect = True
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    CodeComponent trial_code
      Code Type = JS
    TextComponent correct_key
      disabled = True
      letterHeight = 2
      pos = (0, -8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $correct_answer_direction
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  Routine pre_learning
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    CodeComponent debug_prelearning
      Code Type = Auto->JS
  Routine welcomescreen
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    ImageComponent spaceship
      image = images/spaceship.jpg
      opacity = 0.3
      size = (128, 64)
      startVal [time (s)] = 0.0
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    TextComponent welcometext
      color = black
      font = DFKai-SB
      letterHeight = 2
      startVal [time (s)] = 0.0
      wrapWidth = 30
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      text:
        歡迎參加這個實驗！

        請您以上下左右四個按鍵操控一艘太空船，
        請依螢幕中央顯示箭號所指方向，
        按下相對應方向的按鍵

        準備好請按任意鍵開始…
    KeyboardComponent welcome_end
      allowedKeys = '1','2','3','4','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent preplist
      Code Type = Both
      Begin Experiment:
        import numpy as np
        import pandas as pd

        # Experiment setup: gather participant ID and learning condition type
        participant_id = expInfo['participant']

        # Define experiment parameters
        repetitions_per_block = 10
        number_of_practice_blocks = 5
        number_of_learning_blocks = 20
        number_of_motortesting_blocks = 5
        answer_directions = np.array(['4', '3', '2', '1'])

        # Define longer fixed sequence
        fixed_sequence = [1, 0, 3, 0, 1, 2, 0, 2, 1, 3]  # Longer fixed sequence

        # Function to rotate answer direction by 90 degrees clockwise
        def rotate_clockwise_90(orientation):
            return (orientation + 1) % 4

        # Function to generate alternating sequence without more than two consecutive same condition
        def generate_alternating_sequence(random_part, fixed_part, rule_toggle, random_sequences):
            sequence = []
            trial_types = [] # Record each trila are regular or random
            regular_count = 0
            random_count = 0

            for rule in rule_toggle:
                if rule ==1:
                    sequence.append(fixed_part[:10])
                    fixed_part  = fixed_part[10:] # Shift the fixed part
                    trial_types.extend(['regular'] * 10) # Add 'Regular' for each trial
                    regular_count += 10
                else:
                    sequence.append(random_sequences[0])
                    random_sequences = random_sequences[1:]
                    trial_types.extend(['random'] * 10) # Add 'random' for each trial
                    random_count += 10

            return np.concatenate(sequence), trial_types, regular_count, random_count

        # List to store filenames of generated sequence files
        practice_sequences_files = []
        learning_sequences_files = []
        motortesting_sequences_files = []

        # Generate and save an initial sequence to an Excel file
        initial_random_sequence = np.random.randint(0, 4, 85)
        initial_random_answers_directions = answer_directions[initial_random_sequence]
        initial_random_sequence_df = pd.DataFrame({
            'orientation_index': initial_random_sequence,
            'orientation_degrees': initial_random_sequence * 90,
            'correct_answer_index': initial_random_sequence,
            'correct_answer_direction': initial_random_answers_directions
        })
        # Convert correct_answer_direction to string
        initial_random_sequence_df.to_csv(f'sequences/{participant_id}_initial_random.csv', index=False)

        # Save the filename of the initial random sequence to an Excel file
        df_initial_random_files = pd.DataFrame({'initial_random_seq_files': [f'sequences/{participant_id}_initial_random.csv']})
        df_initial_random_files.to_excel(f'sequences/init_random_sequence_file_list.xlsx', index=True)

        # Generate practice sequences
        basic_orientation_indices = [0, 1, 2, 3] # Basic orientations
        practice_answers_indices = np.array([1, 2, 3, 0])
        practice_answers_directions = np.array(['3', '2', '1', '4'])

        practice_sequence = np.tile(basic_orientation_indices, 21)
        practice_sequence = np.append(practice_sequence, np.random.randint(0, 4)) # Ensure 85 trials in total

        for block_index in range(number_of_practice_blocks):
            np.random.shuffle(practice_sequence)
            practice_sequence_answers = practice_answers_indices[practice_sequence]
            practice_sequence_answers_str = practice_answers_directions[practice_sequence]

            # Save the practice sequence to a CSV file
            practice_sequence_df = pd.DataFrame({
                'orientation_degrees': practice_sequence * 90,
                'orientation_index': practice_sequence,
                'correct_answer_index': practice_sequence_answers,
                'correct_answer_direction': practice_sequence_answers_str
            })
            practice_filename = f'sequences/{participant_id}_practice_sequence_{block_index:02}.csv'
            practice_sequence_df.to_csv(practice_filename, index=False)
            practice_sequences_files.append(practice_filename)

        # Save filenames of practice sequences to an Excel file
        df_practice_files = pd.DataFrame({'practice_seq_files': practice_sequences_files})
        df_practice_files.to_excel(f'sequences/practice_sequence_file_list.xlsx', index=False)

        # Generate learning sequences with 90 degrees clockwise rotation
        for block_index in range(number_of_learning_blocks):
            random_part = np.random.randint(0, 4, 5)

            fixed_part = np.tile(fixed_sequence, repetitions_per_block)[:40]
            random_sequences = np.random.randint(0, 4, 40).reshape(4, 10)

            rule_toggle = [1, 1, 2, 1, 2, 2, 1, 2] #Example rule sequence

            learning_sequence, trial_types, regular_count, random_count = generate_alternating_sequence(random_part, fixed_part, rule_toggle, random_sequences)

            # Insert the first 5 random pratice trials at the beginning
            learning_sequence = np.concatenate((random_part, learning_sequence))
            trial_types = ['random'] * 5 + trial_types
            random_count += 5

            # Map sequence indices to answer directions
            learning_sequence_answers = rotate_clockwise_90(learning_sequence)
            learning_sequence_answers_str = answer_directions[learning_sequence_answers]

            # Save the learning sequence to a CSV file
            learning_sequence_df = pd.DataFrame({
                'block': block_index + 1,
                'trial_index': np.arange(1, len(learning_sequence) + 1), # Trial index
                'orientation_degrees': learning_sequence * 90,
                'orientation_index': learning_sequence,
                'correct_answer_index': learning_sequence_answers,
                'correct_answer_direction': learning_sequence_answers_str,
                'trial_types': trial_types, # Add trial type to each trial
                'block_type': 'learning',
                'regular_count': regular_count,
                'random_count': random_count
            })

             # Append summary row
            summary_row = pd.DataFrame({
                'block': [block_index +1],
                'trial_index': ['Summary'],
                'orientation_degrees': [''],
                'orientation_index': [''],
                'correct_answer_index': [''],
                'correct_answer_direction': [''],
                'trial_types': ['Summary'],
                'block_type': ['learning'],
                'regular_count': [regular_count],
                'random_count': [random_count]
            })

            learning_sequence_df = pd.concat([learning_sequence_df, summary_row], ignore_index=True)

            learning_filename = f'sequences/{participant_id}_learning_sequence_{block_index:03}.csv'
            learning_sequence_df.to_csv(learning_filename, index=False)
            learning_sequences_files.append(learning_filename)

        # Save filenames of learning sequences to an Excel file
        df_learning_files = pd.DataFrame({'learning_seq_files': learning_sequences_files})
        df_learning_files.to_excel(f'sequences/learning_sequence_file_list.xlsx', index=False)

        # Generate motor testing sequences without rotation but following learning block sequences
        fixed_sequence_2 = [2, 1, 0, 1, 2, 3, 1, 3, 2, 0] # Rotate the new sequence 90 degrees clockwise

        for block_index in range(number_of_motortesting_blocks):
            random_part = np.random.randint(0, 4, 5) # First 5 trials are random
            fixed_part = np.tile(fixed_sequence_2, repetitions_per_block)[:40] # Fixed the sequence for the block
            random_sequences = np.random.randint(0, 4, 40).reshape(4, 10) # Create random sequences, each with 10 trials

            rule_toggle = [1, 1, 2, 1, 2, 2, 1, 2] #Example rule sequence ensuring no more than two consecutive same conditions

            motortesting_sequence, trial_types, regular_count, random_count = generate_alternating_sequence(random_part, fixed_part, rule_toggle, random_sequences)

            # Insert the first 5 random pratice trials at the beginning
            motortesting_sequence = np.concatenate((random_part, motortesting_sequence))
            trial_types = ['random'] * 5 + trial_types
            random_count += 5

            #Map sequence indices to answer directions
            motortesting_sequence_answers = motortesting_sequence
            motortesting_sequence_answers_str = answer_directions[motortesting_sequence_answers]

            # Ensure no None or NaN values
            motortesting_sequence_df = pd.DataFrame({
                'block': block_index + 1,
                'trial_index': np.arange(1, len(motortesting_sequence) + 1), #Trial index
                'orientation_degrees': motortesting_sequence * 90,
                'orientation_index': motortesting_sequence,
                'correct_answer_index': motortesting_sequence_answers,
                'correct_answer_direction': motortesting_sequence_answers_str,
                'trial_types': trial_types, # Add trial type to each trial
                'block_type': 'perceptual',
                'regular_count': [regular_count] * len(motortesting_sequence),
                'random_count': [random_count] * len(motortesting_sequence)
            })

            motortesting_sequence_df = motortesting_sequence_df.fillna('')  # Fill NaN values with empty strings

            # Append summary row
            summary_row = pd.DataFrame({
                'block': [block_index + 1],
                'trial_index': ['Summary'],
                'orientation_degrees': [''],
                'orientation_index': [''],
                'correct_answer_index': [''],
                'correct_answer_direction': [''],
                'trial_types': ['Summary'],
                'block_type': ['motor'],
                'regular_count': [regular_count],
                'random_count': [random_count]
            })

            motortesting_sequence_df = pd.concat([motortesting_sequence_df, summary_row], ignore_index=True)

            motortesting_filename = f'sequences/{participant_id}_motortesting_sequence_{block_index:04}.csv'
            motortesting_sequence_df.to_csv(motortesting_filename, index=False)
            motortesting_sequences_files.append(motortesting_filename)

        # Save filenames of motor testing sequences to an Excel file
        df_motortesting_files = pd.DataFrame({'motor_testing_seq_files': motortesting_sequences_files})
        df_motortesting_files.to_excel(f'sequences/motor_testing_sequence_file_list.xlsx', index=False)
      Begin JS Experiment:
        /* Syntax Error: Fix Python code */
      Begin Routine:
        bkNum = 0
        bkRT = []
        bkCorrectNum = 0
        bkTrialNum = 0
  Routine pratice_instruction
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    ImageComponent spaceship_rotated
      flipVert = True
      image = images/spaceship.jpg
      opacity = 0.3
      ori = -45
      size = (128, 64)
      startVal [time (s)] = 0.0
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    TextComponent rotation_instruction
      color = black
      font = DFKai-SB
      letterHeight = 2
      startVal [time (s)] = 0.0
      wrapWidth = 30
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      text:
        現在因為方向控制系統故障，
        太空船產生逆時鐘90度的方向偏誤，
        您必須選擇顯示箭號順時鐘旋轉90度後之按鍵：

        看到↑，請按→
        看到→，請按↓
        看到↓，請按←
        看到←，請按↑

        準備好請按任意鍵繼續…
    KeyboardComponent key_resp_2
      allowedKeys = 'space', 'up','left', 'down', 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent participantID
      disabled = True
      letterHeight = 3
      pos = (0, -5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $expInfo['participant'] 
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    CodeComponent pre_prac
      Code Type = Auto->JS
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      Begin Routine:
        bkNum = 0
        bkRT = []
        bkCorrectNum = 0
        bkTrialNum = 0
  Routine pratice_test
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    ImageComponent spaceship_rotated01
      flipVert = True
      image = images/spaceship.jpg
      ori = -45
      size = (128, 64)
      startVal [time (s)] = 0.0
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    TextComponent rotation_instruction01
      font = DFKai-SB
      letterHeight = 2
      startVal [time (s)] = 0.0
      wrapWidth = 100
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      text:
        現在開始正式測驗，過程中不會有任何反饋，每一題之間

        會出現一個十字凝視點後，才會有下一題，請看清楚箭頭的方向後，

        盡你所能的快做出反應，每一區塊結束時都會出現，

        當前的正確率及反應時間

        請按任意鍵繼續...
    KeyboardComponent key_resp_02
      allowedKeys = 'space', 'up','left', 'down', 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent participantID_same
      disabled = True
      letterHeight = 3
      pos = (0, -5)
      startVal [time (s)] = 0.0
      text = $expInfo['participant'] 
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    CodeComponent pre_prac01
      Code Type = Auto->JS
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      Begin Routine:
        bkNum = 0
        bkRT = []
        bkCorrectNum = 0
        bkTrialNum = 0
  Routine thankyouscreen
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    TextComponent text
      color = black
      font = DFKai-SB
      letterHeight = 3
      startVal [time (s)] = 0.0
      wrapWidth = 30
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      text:
        實驗已完成，謝謝您的參與！
        請等待實驗者的進一步導引。
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pre_section
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    CodeComponent performance_pre_section
      Code Type = Auto->JS
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      Begin Routine:
        bkNum += 1
  Routine post_section
    RoutineSettingsComponent post_section
      skipIf = (bkNum < 5 ) and (bkNum % 5 != 0 ) 
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    CodeComponent performance_post_section
      Code Type = Py
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      Begin Routine:
        if len(bkRT) < 1:
            bkRT.append(0)
        if bkTrialNum < 1:
            bkTrialNum = 1

        bkRTmean = int(np.mean(bkRT)*1000)
        bkACC = bkCorrectNum / bkTrialNum * 100
        bkRTmeanstr = f"平均反應時間：{bkRTmean} ms"
        bkACCstr = f"正確率：{bkACC}%"
        sentence1 = "您在這一個段落的表現："
        sentence2 = "請按任意鍵繼續…"
        this_feedbacktext = f"""
        {sentence1}
        {bkRTmeanstr}
        {bkACCstr}
        {sentence2}
        """
    TextComponent feedback_post_section
      font = DFKai-SB
      letterHeight = 2
      startVal [time (s)] = 0.0
      text [set every repeat] = $this_feedbacktext
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    KeyboardComponent key_resp_4
      allowedKeys = '1','2','3','4','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine motor_testing_instruction
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    ImageComponent spaceship3
      image = images/spaceship.jpg
      opacity = 0.3
      size = (128, 64)
      startVal [time (s)] = 0.0
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    TextComponent motor_testing_instruction_text
      color = black
      font = DFKai-SB
      letterHeight = 2
      startVal [time (s)] = 0.0
      wrapWidth = 30
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      text:
        現在太空船已維修好正常運作，
        請您依箭頭所指方向按下反應鍵，
        不要再選擇旋轉後的方向。

        準備好請按任意鍵繼續…
    KeyboardComponent key_resp_3
      allowedKeys = '1','2','3','4','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent pre_motor_testing
      Code Type = Auto->JS
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      Begin Routine:
        bkNum = 0
        bkRT = []
        bkCorrectNum = 0
        bkTrialNum = 0
  Routine fixation_practice
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    PolygonComponent cross
      fillColor = black
      lineColor = black
      shape = cross
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 30
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    CodeComponent feedback_code
      Code Type = Py
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      Begin Experiment:
        feedbackstr=""
      Begin Routine:
        if key_resp.keys == str(correct_answer_direction):
            #feedbackstr = f"正確 {key_resp.keys} {correct_answer_direction}"
            feedbackstr = "正確"
            bkCorrectNum += 1
        else:
            #feedbackstr = f"錯誤 {key_resp.keys} {correct_answer_direction}"
            #feedbackstr = f"{type(key_resp.keys)} {type(correct_answer_direction)}"
            feedbackstr = f"錯誤"


        bkRT.append(key_resp.rt)
        bkTrialNum+=1
    TextComponent feedback_text
      font = DFKai-SB
      letterHeight = 3
      pos = (0, -5)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 60
      text [set every repeat] = $feedbackstr
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  Routine fixation
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    PolygonComponent cross_2
      fillColor = black
      lineColor = black
      shape = cross
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 8
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp.keys == str(correct_answer_direction):
            feedbackstr ="正確"
            bkCorrectNum += 1
        else:
            feedbackstr = "錯誤"

        bkRT.append(key_resp.rt)
        bkTrialNum+=1
  Routine percept_testing_instruction
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    ImageComponent spaceship4
      image = images/spaceship.jpg
      opacity = 0.3
      size = (128, 64)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_5
      allowedKeys = '1','2','3','4','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent percept_testing_instruction_text
      color = black
      font = DFKai-SB
      letterHeight = 2
      startVal [time (s)] = 0.0
      wrapWidth = 30
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      text:
        請您繼續依箭頭所指方向按下反應鍵。
        準備好請按任意鍵繼續…
    CodeComponent pre_percept
      Code Type = Auto->JS
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      Begin Routine:
        bkNum = 0
        bkRT = []
        bkCorrectNum = 0
        bkTrialNum = 0
Flow
  Routine welcomescreen
  LoopInitiator init_random_block loopType="TrialHandler"
    conditions = [{'initial_random_seq_files': 'sequences/motor02_initial_random.csv'}]
    conditionsFile = sequences/init_random_sequence_file_list.xlsx
    isTrials = False
    loopType = sequential
    nReps = 0
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    Routine pre_section
    LoopInitiator init_random_trials loopType="TrialHandler"
      conditionsFile = $initial_random_seq_files
      loopType = sequential
      nReps = 1
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      conditions:
        [{'orientation_id': 0, 'orientation': 0, 'correct_ans': 'up'},
        {'orientation_id': 1, 'orientation': 90, 'correct_ans': 'right'},
        {'orientation_id': 0, 'orientation': 0, 'correct_ans': 'up'},
        {'orientation_id': 0, 'orientation': 0, 'correct_ans': 'up'},
        {'orientation_id': 3, 'orientation': 270, 'correct_ans': 'left'},
        {'orientation_id': 2, 'orientation': 180, 'correct_ans': 'down'},
        {'orientation_id': 1, 'orientation': 90, 'correct_ans': 'right'},
        {'orientation_id': 0, 'orientation': 0, 'correct_ans': 'up'},
        {'orientation_id': 3, 'orientation': 270, 'correct_ans': 'left'},
        {'orientation_id': 1, 'orientation': 90, 'correct_ans': 'right'},
        {'orientation_id': 1, 'orientation': 90, 'correct_ans': 'right'},
        {'orientation_id': 0, 'orientation': 0, 'correct_ans': 'up'},
        {'orientation_id': 2, 'orientation': 180, 'correct_ans': 'down'},
        {'orientation_id': 1, 'orientation': 90, 'correct_ans': 'right'},
        {'orientation_id': 0, 'orientation': 0, 'correct_ans': 'up'},
        {'orientation_id': 0, 'orientation': 0, 'correct_ans': 'up'},
        {'orientation_id': 3, 'orientation': 270, 'correct_ans': 'left'},
        {'orientation_id': 0, 'orientation': 0, 'correct_ans': 'up'},
        {'orientation_id': 2, 'orientation': 180, 'correct_ans': 'down'},
        {'orientation_id': 3, 'orientation': 270, 'correct_ans': 'left'},
        {'orientation_id': 0, 'orientation': 0, 'correct_ans': 'up'},
        {'orientation_id': 3, 'orientation': 270, 'correct_ans': 'left'},
        {'orientation_id': 3, 'orientation': 270, 'correct_ans': 'left'}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
      Routine trial
      Routine fixation_practice
    LoopTerminator init_random_trials
    Routine post_section
  LoopTerminator init_random_block
  Routine pratice_instruction
  LoopInitiator practice_blocks loopType="TrialHandler"
    conditionsFile = sequences/practice_sequence_file_list.xlsx
    loopType = random
    nReps = 0
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    conditions:
      [{'practice_seq_files': 'sequences/motor02_practice_sequence_00.csv'},
      {'practice_seq_files': 'sequences/motor02_practice_sequence_01.csv'},
      {'practice_seq_files': 'sequences/motor02_practice_sequence_02.csv'},
      {'practice_seq_files': 'sequences/motor02_practice_sequence_03.csv'},
      {'practice_seq_files': 'sequences/motor02_practice_sequence_04.csv'}]
    Routine pre_section
    LoopInitiator practice_trials loopType="TrialHandler"
      conditionsFile = $practice_seq_files
      loopType = random
      nReps = 1
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      Routine trial
      Routine fixation_practice
    LoopTerminator practice_trials
    Routine post_section
  LoopTerminator practice_blocks
  Routine pratice_test
  LoopInitiator learning_trials loopType="TrialHandler"
    conditionsFile = sequences/learning_sequence_file_list.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'learning_seq_files': 'sequences/m1_learning_sequence_00.csv'},
      {'learning_seq_files': 'sequences/m1_learning_sequence_01.csv'},
      {'learning_seq_files': 'sequences/m1_learning_sequence_02.csv'},
      {'learning_seq_files': 'sequences/m1_learning_sequence_03.csv'},
      {'learning_seq_files': 'sequences/m1_learning_sequence_04.csv'},
      {'learning_seq_files': 'sequences/m1_learning_sequence_05.csv'},
      {'learning_seq_files': 'sequences/m1_learning_sequence_06.csv'},
      {'learning_seq_files': 'sequences/m1_learning_sequence_07.csv'},
      {'learning_seq_files': 'sequences/m1_learning_sequence_08.csv'},
      {'learning_seq_files': 'sequences/m1_learning_sequence_09.csv'},
      {'learning_seq_files': 'sequences/m1_learning_sequence_10.csv'},
      {'learning_seq_files': 'sequences/m1_learning_sequence_11.csv'},
      {'learning_seq_files': 'sequences/m1_learning_sequence_12.csv'},
      {'learning_seq_files': 'sequences/m1_learning_sequence_13.csv'},
      {'learning_seq_files': 'sequences/m1_learning_sequence_14.csv'},
      {'learning_seq_files': 'sequences/m1_learning_sequence_15.csv'},
      {'learning_seq_files': 'sequences/m1_learning_sequence_16.csv'},
      {'learning_seq_files': 'sequences/m1_learning_sequence_17.csv'},
      {'learning_seq_files': 'sequences/m1_learning_sequence_18.csv'},
      {'learning_seq_files': 'sequences/m1_learning_sequence_19.csv'}]
    Routine pre_section
    LoopInitiator learning_loop loopType="TrialHandler"
      conditionsFile = $learning_seq_files
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('orientation', 360), ('orientation_id', 360)]),
        OrderedDict([('orientation', 180), ('orientation_id', 180)]),
        OrderedDict([('orientation', 180), ('orientation_id', 180)]),
        OrderedDict([('orientation', 90), ('orientation_id', 90)]),
        OrderedDict([('orientation', 270), ('orientation_id', 270)]),
        OrderedDict([('orientation', 90), ('orientation_id', 90)]),
        OrderedDict([('orientation', 90), ('orientation_id', 90)]),
        OrderedDict([('orientation', 360), ('orientation_id', 360)]),
        OrderedDict([('orientation', 360), ('orientation_id', 360)]),
        OrderedDict([('orientation', 270), ('orientation_id', 270)]),
        OrderedDict([('orientation', 180), ('orientation_id', 180)]),
        OrderedDict([('orientation', 270), ('orientation_id', 270)]),
        OrderedDict([('orientation', 270), ('orientation_id', 270)]),
        OrderedDict([('orientation', 180), ('orientation_id', 180)]),
        OrderedDict([('orientation', 90), ('orientation_id', 90)]),
        OrderedDict([('orientation', 270), ('orientation_id', 270)]),
        OrderedDict([('orientation', 360), ('orientation_id', 360)]),
        OrderedDict([('orientation', 180), ('orientation_id', 180)]),
        OrderedDict([('orientation', 180), ('orientation_id', 180)]),
        OrderedDict([('orientation', 270), ('orientation_id', 270)]),
        OrderedDict([('orientation', 270), ('orientation_id', 270)]),
        OrderedDict([('orientation', 90), ('orientation_id', 90)]),
        OrderedDict([('orientation', 90), ('orientation_id', 90)]),
        OrderedDict([('orientation', 180), ('orientation_id', 180)]),
        OrderedDict([('orientation', 360), ('orientation_id', 360)])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
      Routine trial
      Routine fixation
    LoopTerminator learning_loop
    Routine post_section
  LoopTerminator learning_trials
  Routine motor_testing_instruction
  LoopInitiator motor_testing_trials loopType="TrialHandler"
    conditionsFile = sequences/motor_testing_sequence_file_list.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'motor_testing_seq_files': 'sequences/motor00000_motortesting_sequence_0000.csv'},
      {'motor_testing_seq_files': 'sequences/motor00000_motortesting_sequence_0001.csv'},
      {'motor_testing_seq_files': 'sequences/motor00000_motortesting_sequence_0002.csv'},
      {'motor_testing_seq_files': 'sequences/motor00000_motortesting_sequence_0003.csv'},
      {'motor_testing_seq_files': 'sequences/motor00000_motortesting_sequence_0004.csv'}]
    Routine pre_section
    LoopInitiator motor_testing_loop loopType="TrialHandler"
      conditionsFile = $motor_testing_seq_files
      loopType = sequential
      nReps = 1
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      Routine trial
      Routine fixation
    LoopTerminator motor_testing_loop
    Routine post_section
  LoopTerminator motor_testing_trials
  Routine thankyouscreen
